<?xml version="1.0" encoding="UTF-8"?>
<model
    name="saucerman_bers_2008"
    cmeta:id="saucerman_bers_2008"
    xmlns="http://www.cellml.org/cellml/1.1#"
    xmlns:cellml="http://www.cellml.org/cellml/1.1#"
    xmlns:cmeta="http://www.cellml.org/metadata/1.0#"
    xmlns:xlink="http://www.w3.org/1999/xlink"
    xmlns:dc="http://purl.org/dc/elements/1.1/"
    xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" 
    xmlns:bqs="http://www.cellml.org/bqs/1.0#" 
    xmlns:dcterms="http://purl.org/dc/terms/"
    xmlns:vCard="http://www.w3.org/2001/vcard-rdf/3.0#"  >

  <import xlink:href="saucerman_2008_dyadic_cleft.cellml">
    <component name="dyadic_cleft" component_ref="dyadic_cleft" />
  </import>
  
  <connection>
    <map_components component_1="dyadic_cleft" component_2="JCaM_DYAD_SL" />
    <map_variables variable_1="CaM" variable_2="CaM_DYAD" />
    <map_variables variable_1="B" variable_2="B_DYAD" />
  </connection>
  
  <connection>
    <map_components component_1="dyadic_cleft" component_2="JCa2CaM_DYAD_SL" />
    <map_variables variable_1="Ca2CaM" variable_2="Ca2CaM_DYAD" />
    <map_variables variable_1="B" variable_2="B_DYAD" />
  </connection>
  
  <connection>
    <map_components component_1="dyadic_cleft" component_2="JCa4CaM_DYAD_SL" />
    <map_variables variable_1="Ca4CaM" variable_2="Ca4CaM_DYAD" />
    <map_variables variable_1="B" variable_2="B_DYAD" />
  </connection>

  <connection>
    <map_components component_1="dyadic_cleft" component_2="environment" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  
  <import xlink:href="saucerman_2008_sarcolemma.cellml">
    <component name="sarcolemma" component_ref="sarcolemma" />
  </import>
  
  <connection>
    <map_components component_1="sarcolemma" component_2="JCaM_DYAD_SL" />
    <map_variables variable_1="CaM" variable_2="CaM_SL" />
  </connection>
  
  <connection>
    <map_components component_1="sarcolemma" component_2="JCa2CaM_DYAD_SL" />
    <map_variables variable_1="Ca2CaM" variable_2="Ca2CaM_SL" />
  </connection>
  
  <connection>
    <map_components component_1="sarcolemma" component_2="JCa4CaM_DYAD_SL" />
    <map_variables variable_1="Ca4CaM" variable_2="Ca4CaM_SL" />
  </connection>
  
  <connection>
    <map_components component_1="sarcolemma" component_2="JCaM_SL_CYT" />
    <map_variables variable_1="CaM" variable_2="CaM_SL" />
  </connection>
  
  <connection>
    <map_components component_1="sarcolemma" component_2="JCa2CaM_SL_CYT" />
    <map_variables variable_1="Ca2CaM" variable_2="Ca2CaM_SL" />
  </connection>
  
  <connection>
    <map_components component_1="sarcolemma" component_2="JCa4CaM_SL_CYT" />
    <map_variables variable_1="Ca4CaM" variable_2="Ca4CaM_SL" />
  </connection>

  <connection>
    <map_components component_1="sarcolemma" component_2="environment" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  
  <import xlink:href="saucerman_2008_cytosol.cellml">
    <component name="cytosol" component_ref="cytosol" />
  </import>
  
  <connection>
    <map_components component_1="cytosol" component_2="JCaM_SL_CYT" />
    <map_variables variable_1="CaM" variable_2="CaM_CYT" />
  </connection>
  
  <connection>
    <map_components component_1="cytosol" component_2="JCa2CaM_SL_CYT" />
    <map_variables variable_1="Ca2CaM" variable_2="Ca2CaM_CYT" />
  </connection>
  
  <connection>
    <map_components component_1="cytosol" component_2="JCa4CaM_SL_CYT" />
    <map_variables variable_1="Ca4CaM" variable_2="Ca4CaM_CYT" />
  </connection>

  <connection>
    <map_components component_1="cytosol" component_2="environment" />
    <map_variables variable_1="time" variable_2="time" />
  </connection>
  
  <!-- units -->

  <units name="micromolar">
    <unit units="mole" prefix="micro"/>
    <unit units="litre" exponent="-1"/>
  </units>
  
  <units name="flux">
    <unit units="micromolar" />
    <unit units="second" exponent="-1"/>
  </units>

  <units name="first_order_rate_constant">
    <unit units="second" exponent="-1"/>
  </units>

  <units name="second_order_rate_constant">
    <unit units="micromolar" exponent="-1"/>
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="third_order_rate_constant">
    <unit units="micromolar" exponent="-2"/>
    <unit units="second" exponent="-1"/>
  </units>
  
  <units name="micromolar2">
    <unit units="micromolar" exponent="2"/>
  </units>
  
  <units name="micromole_per_second">
    <unit units="mole" prefix="micro" />
	<unit units="second" exponent="-1"/>
  </units>
  
  <units name="litre_per_second">
    <unit units="litre" />
    <unit units="second" exponent="-1"/>
  </units>
  
  
  <component name="environment">
    <variable units="second" public_interface="out" name="time"/>
  </component>

  <!-- CaM transport -->
  
  <component name="JCaM_DYAD_SL" cmeta:id="JCaM_DYAD_SL">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/0P/PP-rdf-syntax-ns#">
      <rdf:Description rdf:about="JCaM_DYAD_SL">
        <dc:title>JCaM_DYAD_SL</dc:title>
        <dcterms:alternative>CaM transport between the dyadic space and the sarcolemma</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="flux" name="JCaM_DYAD_SL" />
	
	<variable units="second_order_rate_constant" initial_value="0.007" name="k0B_on"/>
    <variable units="first_order_rate_constant" initial_value="0.0014" name="k0B_off"/>

    <variable units="micromolar" public_interface="in" name="CaM_DYAD"/>
    <variable units="micromolar" public_interface="in" name="B_DYAD"/>
	<variable units="micromolar" public_interface="in" name="CaM_SL"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="15"> 
      <apply><eq/> 
        <ci> JCaM_DYAD_SL </ci>
        <apply><minus/>
	      <apply><times/>
            <ci> k0B_off </ci>
			<ci> CaM_DYAD </ci>
	      </apply>
		  <apply><times/>
            <ci> k0B_on </ci>
			<ci> B_DYAD </ci>
			<ci> CaM_SL </ci>
	      </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="JCa2CaM_DYAD_SL" cmeta:id="JCa2CaM_DYAD_SL">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/0P/PP-rdf-syntax-ns#">
      <rdf:Description rdf:about="JCa2CaM_DYAD_SL">
        <dc:title>JCa2CaM_DYAD_SL</dc:title>
        <dcterms:alternative>Ca2CaM transport between the dyadic space and the sarcolemma</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="flux" name="JCa2CaM_DYAD_SL" />
	
	<variable units="second_order_rate_constant" initial_value="0.007" name="k2B_on"/>
    <variable units="first_order_rate_constant" initial_value="0.000014" name="k2B_off"/>

    <variable units="micromolar" public_interface="in" name="Ca2CaM_DYAD"/>
    <variable units="micromolar" public_interface="in" name="B_DYAD"/>
	<variable units="micromolar" public_interface="in" name="Ca2CaM_SL"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="16"> 
      <apply><eq/> 
        <ci> JCa2CaM_DYAD_SL </ci>
        <apply><minus/>
	      <apply><times/>
            <ci> k2B_off </ci>
			<ci> Ca2CaM_DYAD </ci>
	      </apply>
		  <apply><times/>
            <ci> k2B_on </ci>
			<ci> B_DYAD </ci>
			<ci> Ca2CaM_SL </ci>
	      </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="JCa4CaM_DYAD_SL" cmeta:id="JCa4CaM_DYAD_SL">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/0P/PP-rdf-syntax-ns#">
      <rdf:Description rdf:about="JCa2CaM_DYAD_SL">
        <dc:title>JCa4CaM_DYAD_SL</dc:title>
        <dcterms:alternative>Ca4CaM transport between the dyadic space and the sarcolemma</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="flux" name="JCa4CaM_DYAD_SL" />
	
	<variable units="second_order_rate_constant" initial_value="0.007" name="k4B_on"/>
    <variable units="first_order_rate_constant" initial_value="0.000014" name="k4B_off"/>

    <variable units="micromolar" public_interface="in" name="Ca4CaM_DYAD"/>
    <variable units="micromolar" public_interface="in" name="B_DYAD"/>
	<variable units="micromolar" public_interface="in" name="Ca4CaM_SL"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="17"> 
      <apply><eq/> 
        <ci> JCa4CaM_DYAD_SL </ci>
        <apply><minus/>
	      <apply><times/>
            <ci> k4B_off </ci>
			<ci> Ca4CaM_DYAD </ci>
	      </apply>
		  <apply><times/>
            <ci> k4B_on </ci>
			<ci> B_DYAD </ci>
			<ci> Ca4CaM_SL </ci>
	      </apply>
	    </apply>
      </apply>
    </math>
  </component>
  
  <component name="JCaM_SL_CYT" cmeta:id="JCaM_SL_CYT">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/0P/PP-rdf-syntax-ns#">
      <rdf:Description rdf:about="JCaM_SL_CYT">
        <dc:title>JCaM_SL_CYT</dc:title>
        <dcterms:alternative>CaM transport between the sarcolemma and the cytosol</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="micromole_per_second" name="JCaM_SL_CYT" />
	
	<variable units="litre_per_second" public_interface="in" name="kSLCYT"/>
    <variable units="micromolar" public_interface="in" name="CaM_SL"/>
    <variable units="micromolar" public_interface="in" name="CaM_CYT"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="18"> 
      <apply><eq/> 
        <ci> JCaM_SL_CYT </ci>
        <apply><times/>
		  <ci> kSLCYT </ci>
	      <apply><minus/>
            <ci> CaM_SL </ci>
			<ci> CaM_CYT </ci>
	      </apply>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="JCa2CaM_SL_CYT" cmeta:id="JCa2CaM_SL_CYT">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/0P/PP-rdf-syntax-ns#">
      <rdf:Description rdf:about="JCa2CaM_SL_CYT">
        <dc:title>JCa2CaM_SL_CYT</dc:title>
        <dcterms:alternative>Ca2CaM transport between the sarcolemma and the cytosol</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="micromole_per_second" name="JCa2CaM_SL_CYT" />
	
	<variable units="litre_per_second" public_interface="in" name="kSLCYT"/>
    <variable units="micromolar" public_interface="in" name="Ca2CaM_SL"/>
    <variable units="micromolar" public_interface="in" name="Ca2CaM_CYT"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="19"> 
      <apply><eq/> 
        <ci> JCa2CaM_SL_CYT </ci>
        <apply><times/>
		  <ci> kSLCYT </ci>
	      <apply><minus/>
            <ci> Ca2CaM_SL </ci>
			<ci> Ca2CaM_CYT </ci>
	      </apply>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="JCa4CaM_SL_CYT" cmeta:id="JCa4CaM_SL_CYT">
    <rdf:RDF xmlns:rdf="http://www.w3.org/1999/0P/PP-rdf-syntax-ns#">
      <rdf:Description rdf:about="JCa4CaM_SL_CYT">
        <dc:title>JCa4CaM_SL_CYT</dc:title>
        <dcterms:alternative>Ca4CaM transport between the sarcolemma and the cytosol</dcterms:alternative>  
      </rdf:Description>
    </rdf:RDF>  
    <variable units="micromole_per_second" name="JCa4CaM_SL_CYT" />
	
	<variable units="litre_per_second" public_interface="in" name="kSLCYT"/>
    <variable units="micromolar" public_interface="in" name="Ca4CaM_SL"/>
    <variable units="micromolar" public_interface="in" name="Ca4CaM_CYT"/>
    
    <math xmlns="http://www.w3.org/1998/Math/MathML" id="20"> 
      <apply><eq/> 
        <ci> JCa4CaM_SL_CYT </ci>
        <apply><times/>
		  <ci> kSLCYT </ci>
	      <apply><minus/>
            <ci> Ca4CaM_SL </ci>
			<ci> Ca4CaM_CYT </ci>
	      </apply>
		</apply>
      </apply>
    </math>
  </component>
  
  <component name="model_parameters">
    <variable units="litre_per_second" initial_value="8.59E-12" public_interface="out" name="kSLCYT" />
  </component>
  
  <!-- connections -->
  
  <connection>
    <map_components component_1="JCaM_SL_CYT" component_2="model_parameters" />
    <map_variables variable_1="kSLCYT" variable_2="kSLCYT" />
  </connection>
  
  <connection>
    <map_components component_1="JCa2CaM_SL_CYT" component_2="model_parameters" />
    <map_variables variable_1="kSLCYT" variable_2="kSLCYT" />
  </connection>
  
  <connection>
    <map_components component_1="JCa4CaM_SL_CYT" component_2="model_parameters" />
    <map_variables variable_1="kSLCYT" variable_2="kSLCYT" />
  </connection>
</model>
