[[model]]
name: Luo-Rudy model I (1991)
desc: """
Implementation of the Luo-Rudy model I for the ventricular myocyte.
Based on an updated formulation downloaded from http://rudylab.wustl.edu
and licensed under a GNU GPL license version 2.
"""
# Template functions
sig(V, Vstar, a, b) = exp(a * (Vstar - V)) / (1 + exp(b * (Vstar - V)))
# Initial conditions
membrane.V = -84.5286
ina.m      = 0.0017
ina.h      = 0.9832
ina.j      = 0.995484
ica.d      = 0.000003
ica.f      = 1
ik.x       = 0.0057
ica.Ca_i   = 0.0002
test.t1    = 0.5
test.t2    = 0.5

# Test for dot() ordering
[test]
dot(t1) = dot(membrane.V)
inter = dot(t1)
dot(t2) = 2 * inter

# Test for time dependence
[test2]
t3 = membrane.V + sin(engine.time)

# Simulation engine variables
[engine]
time = 0 bind time
pace = 0 bind pace

# Membrane potential and stimulus
[membrane]
desc: This is the membrane component
dot(V) = i_stim - (ina.INa + ik.IK + ib.Ib + ikp.IKp + ik1.IK1 + ica.ICa)
    in [mV]
    desc: The membrane potential
i_stim = engine.pace * stim_amplitude
stim_amplitude = 80 [uA/cm^2]
x = 3 * dot(ina.m)

# Fast Sodium current
[ina]
use membrane.V as V
a = 1 - 1 / (1 + exp(-(V + 40) / 0.24))
    desc: Used instead of if statement.
dot(m) = (inf - m) / tau
    alpha = 0.32 * (V + 47.13) / (1 - exp(-0.1 * (V + 47.13)))
    beta  = 0.08 * exp(-V / 11)
        desc: """
            This is beta
        """
    tau = 1 / (alpha + beta)
    inf = alpha * tau
x = 5 * dot(m) + z
y = dot(h) + 3 * x
z = 0.4 * cell.K_o
dot(h) = (inf - h) / tau
    desc: """ Triple quoted single line """
    alpha = a * 0.135 * exp((80 + V) / -6.8)
        desc: """    """
    beta  = a * (3.56 * exp(0.079 * V) + 3.1e5 * exp(0.35 * V)) \
          + (1 - a) / (0.13 * (1 + exp((V + 10.66) / -11.1)))
        desc:      """


        lalala
        """
    tau = 1 / (alpha + beta)
    inf = alpha * tau
dot(j) =  alpha * (1 - j) - beta * j + x + y
    desc: """"""
    alpha = a * ( -127140 * exp(0.2444 * V) - 3.474e-5 * exp(-0.04391 * V)) \
              * (V + 37.78) / (1 + exp(0.311 * (V + 79.23)))
    beta  = a * (0.1212 * exp(-0.01052 * V) / (1 + exp(-0.1378 * (V + 40.14)))) \
          + (1 - a) * (0.3 * exp(-2.535e-7 * V) / (1 + exp(-0.1 * (V + 32))))
gNa = 16
ENa = cell.RTF * log(cell.Na_o / cell.Na_i)
    desc: Nernst potential of Na
    in [mV]
INa = gNa * m^3 * h * j * (V - ENa)
    desc: Fast sodium current
    in [uA/cm^2]
desc: """
The fast sodium current.
"""

# Time-dependent Potassium current
[ik]
use membrane.V as V
dot(x) = (inf - x) / tau
    alpha = 0.0005 * exp(0.083 * (V + 50)) / (1 + exp(0.057 * (V + 50)))
    beta  = 0.0013 * exp(-0.06 * (V + 20)) / (1 + exp(-0.04 * (V + 20)))
    tau = 1 / (alpha + beta)
    inf = alpha * tau
PNa_K = 0.01833 : Permability ratio of Na to K
E = cell.RTF * log((cell.K_o + PNa_K * cell.Na_o) / (cell.K_i + PNa_K * cell.Na_i))
    in [mV]
xi = piecewise(V > -100,
    2.837 * (exp(0.04 * (V + 77)) - 1) / ((V + 77) * exp(0.04 * (V + 35))),
    1)
gK = 0.282 * sqrt(cell.K_o / 5.4)
    in [mS/uF]
IK = gK * xi * x * (V - E)
    desc: Time-dependent Potassium current
abc = dot(ina.m) * dot(ina.h)

# Plateau Potassium current
[ikp]
use membrane.V as V
gKp = 0.0183
IKp = gKp * (V + 87.8789) / (1 + exp((7.488 - V) / 5.98))
    desc: Plateau Potassium current

# Slow inward Calcium current
[ica]
use membrane.V as V
dot(Ca_i) =  -1e-4 * ICa + 0.07 * (1e-4 - Ca_i)
    desc: Intracellular Calcium concentration
E = 7.7 - 13.0287 * log(Ca_i / cell.Ca_o)
    desc: Nernst potential
    in [mV]
dot(d) =  alpha * (1 - d) - beta * d
    alpha = 0.095 * exp(-0.01 * (V - 5)) / (1 + exp(-0.072 * (V - 5)))
    beta  = 0.07 * exp(va) / (1 + exp(vb))
        va = -0.017 * vc
        vb = 0.05 * vc
        vc = 22 + vd
            vd = 22 + V
                in [mV]
dot(f) = (inf - f) / tau
    alpha = 0.02    # 0.012 * sig(V, -28, 0.008, -0.15)
    beta = 0.0065   # 0.0065 * sig(V, -30, 0.02, 0.2)
    tau = 1 / (alpha + beta)
    inf = alpha * tau
gCa = 0.09
ICa = nest1 * (V - E)
    nest1 = gCa * d * nest2
        in [uA/cm^2/mV]
    nest2 = f
        in [1]

# Time-independent potassium current
[ik1]
use membrane.V as V
E = cell.RTF * log(cell.K_o / cell.K_i)
gK1 = 0.6047 * sqrt(cell.K_o / 5.4) * alpha / (alpha + beta)
    alpha = 1.02 / (1 + exp(0.2385 * (V - E - 59.215)))
    beta  = (0.49124 * exp(0.08032 * (V - E + 5.476)) + exp(0.06175 * (V - E - 594.31)))  \
          / (1 + exp(-0.5143 * (V - E + 4.753)))
IK1 = gK1 * (V - E)

# Background current
[ib]
gb = 0.03921
Ib = gb * (membrane.V + 59.87) : Background current

# Cell parameters (ventricular mammalian cell)
[cell]
K_o = 5.4 [mM]
K_i = 145 [mM]
Na_o = 140 [mM]
Na_i = 10 [mM]
Ca_o = 1.8 [mM]
R = 8.314 [J/K] : Gas constant
T = 273 + 37 [K] : Absolute temperature
F = 96.5 [C/mol] : Faraday constant
RTF = R*T/F

[[protocol]]
# Level Start Length Period Multiplier
1.0     10    0.5    1000   0

[[script]]
import myokit
# Run simulation
m = get_model()
p = get_protocol()
s = myokit.Simulation(m, p, log=myokit.LOG_INTER+myokit.LOG_BOUND)
d = s.run(1000)
